PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = absoluteThreshold2
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcom
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    ImageComponent image
      image = welcom.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine instruction1
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    ImageComponent image_2
      image = 11.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine instruction2
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    ImageComponent image_3
      image = 12.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine testi
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    PolygonComponent polygon
      fillColor [set every repeat] = $[Intensity, Intensity, Intensity]
      lineColor [set every repeat] = $[Intensity, Intensity, Intensity]
      lineWidth = 0.5
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine maintest
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    PolygonComponent polygon_2
      fillColor [set every repeat] = $[Intensity, Intensity, Intensity]
      lineColor [set every repeat] = $[Intensity, Intensity, Intensity]
      lineWidth = 0.5
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent stopLoop
      Code Type = Auto->JS
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      Begin Experiment:
        RT = None
      End Routine:
        if key_resp.keys == 'space':
            RT = key_resp.rt

            thisExp.addData('Threshold', Intensity)
            thisExp.addData('RT', RT)

            ascendingLoop.finished = True
  Routine End
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    CodeComponent showRT
      Code Type = Auto->JS
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      Begin Routine:
        RT_text = f"""نتیجه:

        از سطح {Trial} به بعد، دایره قابل مشاهده بود.

        برای خروج، کلید فاصله را فشار دهید.
        """
    TextComponent EndText
      languageStyle = Arabic
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $RT_text
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    KeyboardComponent EndKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodby
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    ImageComponent image_5
      image = the end.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction4
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    ImageComponent image_4
      image = 14.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction3
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    ImageComponent image_6
      image = 13.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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Flow
  Routine welcom
  Routine instruction1
  Routine instruction2
  LoopInitiator test1 loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Trial': 1, 'Intensity': 0},
      {'Trial': 2, 'Intensity': 0.025},
      {'Trial': 3, 'Intensity': 0.05},
      {'Trial': 4, 'Intensity': 0.075},
      {'Trial': 5, 'Intensity': 0.1},
      {'Trial': 6, 'Intensity': 0.125},
      {'Trial': 7, 'Intensity': 0.15},
      {'Trial': 8, 'Intensity': 0.175},
      {'Trial': 9, 'Intensity': 0.2}]
    Routine testi
  LoopTerminator test1
  Routine instruction3
  Routine instruction4
  LoopInitiator ascendingLoop loopType="TrialHandler"
    conditionsFile = MainLevels_101.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Trial': 1, 'Intensity': 0},
      {'Trial': 2, 'Intensity': 0.005},
      {'Trial': 3, 'Intensity': 0.01},
      {'Trial': 4, 'Intensity': 0.015},
      {'Trial': 5, 'Intensity': 0.02},
      {'Trial': 6, 'Intensity': 0.025},
      {'Trial': 7, 'Intensity': 0.03},
      {'Trial': 8, 'Intensity': 0.035},
      {'Trial': 9, 'Intensity': 0.04},
      {'Trial': 10, 'Intensity': 0.045},
      {'Trial': 11, 'Intensity': 0.05},
      {'Trial': 12, 'Intensity': 0.055},
      {'Trial': 13, 'Intensity': 0.06},
      {'Trial': 14, 'Intensity': 0.065},
      {'Trial': 15, 'Intensity': 0.07},
      {'Trial': 16, 'Intensity': 0.075},
      {'Trial': 17, 'Intensity': 0.08},
      {'Trial': 18, 'Intensity': 0.085},
      {'Trial': 19, 'Intensity': 0.09},
      {'Trial': 20, 'Intensity': 0.095},
      {'Trial': 21, 'Intensity': 0.1},
      {'Trial': 22, 'Intensity': 0.105},
      {'Trial': 23, 'Intensity': 0.11},
      {'Trial': 24, 'Intensity': 0.115},
      {'Trial': 25, 'Intensity': 0.12},
      {'Trial': 26, 'Intensity': 0.125},
      {'Trial': 27, 'Intensity': 0.13},
      {'Trial': 28, 'Intensity': 0.135},
      {'Trial': 29, 'Intensity': 0.14},
      {'Trial': 30, 'Intensity': 0.145},
      {'Trial': 31, 'Intensity': 0.15},
      {'Trial': 32, 'Intensity': 0.155},
      {'Trial': 33, 'Intensity': 0.16},
      {'Trial': 34, 'Intensity': 0.165},
      {'Trial': 35, 'Intensity': 0.17},
      {'Trial': 36, 'Intensity': 0.175},
      {'Trial': 37, 'Intensity': 0.18},
      {'Trial': 38, 'Intensity': 0.185},
      {'Trial': 39, 'Intensity': 0.19},
      {'Trial': 40, 'Intensity': 0.195},
      {'Trial': 41, 'Intensity': 0.2},
      {'Trial': 42, 'Intensity': 0.205},
      {'Trial': 43, 'Intensity': 0.21},
      {'Trial': 44, 'Intensity': 0.215},
      {'Trial': 45, 'Intensity': 0.22},
      {'Trial': 46, 'Intensity': 0.225}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
    Routine maintest
  LoopTerminator ascendingLoop
  Routine End
  Routine goodby
